PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['images/target_I.jpg', 'images/target_plus.jpg', 'images/target_square.jpg', 'images/target_T.jpg', 'images/target_X.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[1, 1, 1]
  expName = choice_RTT_demo
  keyboardBackend = ioHub
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Routines
  Routine instructions
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    TextComponent instr
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        In this task you will make a decision as to which shape you have seen.

        Press C or click cross for a cross
        Press V or click square for a square
        Press B or click plus for a plus

        First, we will have a quick practice.

        Push space bar or click / touch one of the buttons to begin.
    KeyboardComponent startInst
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent startMouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent intro_square
      image = images/response_square.jpg
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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    ImageComponent intro_plus
      image = images/response_plus.jpg
      pos = (0.25, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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    ImageComponent intro_cross
      image = images/response_cross.jpg
      pos = (-0.25, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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  Routine end_message
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    TextComponent end_text
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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      text:
        That’s the experiment finished!

        Thanks for your time. You’ve earned a cup of tea.
  Routine trial
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    CodeComponent setStimuli
      Code Type = Auto->JS
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      Begin Routine:
        positionList = [-0.375,-0.125,0.125,0.375] #list of possible X coordinates for target to appear
        shuffle(positionList) #randomise these positions
        targetX = positionList[0] #pick the first value from the list

        #thisImage is the variable in the Image field of targetImage
        if thisImage == 'images/target_square.jpg': #path of where to find the target image
            corrAns = 'v' #setting the key press that will be the correct answer
            corrButton = square_button #setting the button that will be the correct answer
            corrButtonName = 'square_button' #making this a string so that it can be compared later when checking for acccuracy
        elif thisImage == 'images/target_cross.jpg':
            corrAns = 'c'
            corrButton = cross_button
            corrButtonName = 'cross_button'
        elif thisImage == 'images/target_plus.jpg':
            corrAns = 'b'
            corrButton = plus_button
            corrButtonName = 'plus_button'
    ImageComponent rightright_tile
      image = images/grey_square.jpg
      pos = (0.375, 0)
      saveStartStop = False
      size = (0.22, 0.22)
      startVal [time (s)] = 0.5
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    ImageComponent right_tile
      image = images/grey_square.jpg
      pos = (0.125, 0)
      saveStartStop = False
      size = (0.22, 0.22)
      startVal [time (s)] = 0.5
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    ImageComponent left_tile
      image = images/grey_square.jpg
      pos = (-0.125, 0)
      saveStartStop = False
      size = (0.22, 0.22)
      startVal [time (s)] = 0.5
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    ImageComponent leftleft_tile
      image = images/grey_square.jpg
      pos = (-0.375, 0)
      saveStartStop = False
      size = (0.22, 0.22)
      startVal [time (s)] = 0.5
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    ImageComponent square_button
      image = images/response_square.jpg
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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    ImageComponent plus_button
      image = images/response_plus.jpg
      pos = (0.25, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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    ImageComponent cross_button
      image = images/response_cross.jpg
      pos = (-0.25, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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    ImageComponent targetImage
      image [set every repeat] = $thisImage
      pos [set every repeat] = [targetX, 0]
      size = (0.2, 0.2)
      startVal [time (s)] = $onsetTime
      stopVal [duration (s)] = 0.2
      units = height
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    KeyboardComponent keyResp
      allowedKeys [set every repeat] = 'b','c','v'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
      syncScreenRefresh = False
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    MouseComponent mouseResp
      clickable = square_button, plus_button, cross_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0
      timeRelativeTo = routine
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    CodeComponent recordRTandAccuracy
      Code Type = Auto->JS
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      End Routine:
        #this code is to record the reaction times and accuracy of the trial

        thisRoutineDuration = t # how long did this trial last

        # keyResp.rt is the time with which a key was pressed
        # mouseResp.time is the time with which a button was clicked/pressed
        # thisRecRT - how long it took for participants to respond after onset of targetImage
        # thisRespType - keeping track of which response component was used
        # thisAcc - whether or not the response was correct
        # correctMouseResp - name of column in data output which records the accuracy of mouse responses

        if keyResp.keys:
            thisRespType = 'keyboard' #record type of response
            thisRecRT = keyResp.rt - onsetTime #record time taken to response
            if keyResp.corr == 1: #if the response is correct
                thisAcc = 'correct' #print correct
            else:
                thisAcc = 'incorrect'
        else:
            thisRespType = 'mouse'
            thisRecRT = mouseResp.time[0] - onsetTime
            if mouseResp.clicked_name[0] == corrButtonName: #check if what was clicked corresponds to the correct button
                thisAcc = 'correct'
                thisExp.addData('correctMouseResp', 1) #record accuracy of mouse clicks
            else:
                thisAcc = 'incorrect'
                thisExp.addData('correctMouseResp', 0)

        thisExp.addData('trialRespTimes', thisRecRT) #record the actual response times of each trial


        #print(thisRoutineDuration, thisRecRT, thisRespType, thisAcc, onsetTime)
  Routine trial_feedback
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    TextComponent text_fb
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"The duration of the last routine was: "  + str(round(thisRoutineDuration, 3)) + " \nThe last recorded RT was: "  + str(round(thisRecRT, 3)) + " \nThe response type was: "  + thisRespType + " \nThe response was: "  + thisAcc + " \n\nPress or click to continue."  
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    KeyboardComponent moveOnKeys
      allowedKeys = 'c','v','b','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent moveOnMouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine mainTrial_instruct
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    TextComponent main_trial_instruct
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Well done, that’s the practice over!

        Now for the main experiment.

        Click / tap / press space to continue!
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent ready_button
      image = images/response_ready.jpg
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 1
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Flow
  Routine instructions
  LoopInitiator PracticeLoop loopType="TrialHandler"
    conditionsFile = RTtimeConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'onsetTime': 1.1, 'thisImage': 'images/target_cross.jpg'},
      {'onsetTime': 1.3, 'thisImage': 'images/target_plus.jpg'},
      {'onsetTime': 1.5, 'thisImage': 'images/target_square.jpg'},
      {'onsetTime': 1.3, 'thisImage': 'images/target_cross.jpg'},
      {'onsetTime': 1.5, 'thisImage': 'images/target_plus.jpg'},
      {'onsetTime': 1.1, 'thisImage': 'images/target_square.jpg'},
      {'onsetTime': 1.5, 'thisImage': 'images/target_cross.jpg'},
      {'onsetTime': 1.1, 'thisImage': 'images/target_plus.jpg'},
      {'onsetTime': 1.3, 'thisImage': 'images/target_square.jpg'}]
    Routine trial
    Routine trial_feedback
  LoopTerminator PracticeLoop
  Routine mainTrial_instruct
  LoopInitiator ExptLoop loopType="TrialHandler"
    conditionsFile = RTtimeConditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'onsetTime': 1.1, 'thisImage': 'images/target_cross.jpg'},
      {'onsetTime': 1.3, 'thisImage': 'images/target_plus.jpg'},
      {'onsetTime': 1.5, 'thisImage': 'images/target_square.jpg'},
      {'onsetTime': 1.3, 'thisImage': 'images/target_cross.jpg'},
      {'onsetTime': 1.5, 'thisImage': 'images/target_plus.jpg'},
      {'onsetTime': 1.1, 'thisImage': 'images/target_square.jpg'},
      {'onsetTime': 1.5, 'thisImage': 'images/target_cross.jpg'},
      {'onsetTime': 1.1, 'thisImage': 'images/target_plus.jpg'},
      {'onsetTime': 1.3, 'thisImage': 'images/target_square.jpg'}]
    Routine trial
  LoopTerminator ExptLoop
  Routine end_message
